# Generated by Configurator on Wed Aug 05 11:46:10 CEST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,DWheel,DemoCamera,DWheel
Device,DStateDevice,DemoCamera,DStateDevice
Device,DObjective,DemoCamera,DObjective
Device,DStage,DemoCamera,DStage
Device,DXYStage,DemoCamera,DXYStage
Device,DLightPath,DemoCamera,DLightPath
Device,DAutoFocus,DemoCamera,DAutoFocus
Device,DShutter,DemoCamera,DShutter
Device,D-DA,DemoCamera,D-DA
Device,DOptovar,DemoCamera,DOptovar
Device,DGalvo,DemoCamera,DGalvo
Device,TransposeProcessor,DemoCamera,TransposeProcessor
Device,ImageFlipX,DemoCamera,ImageFlipX
Device,ImageFlipY,DemoCamera,ImageFlipY
Device,MedianFilter,DemoCamera,MedianFilter
Device,Rotator,DemoCamera,DStage
Device,Multi Camera,Utilities,Multi Camera
Device,DHub-1,DemoCamera,DHub
Device,DCam1,DemoCamera,DCam

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000
Property,DStateDevice,Number of positions,10
Property,DOptovar,High Position Magnification,1.6000
Property,DCam1,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,DWheel,DHub
Parent,DStateDevice,DHub
Parent,DObjective,DHub
Parent,DStage,DHub
Parent,DXYStage,DHub
Parent,DLightPath,DHub
Parent,DAutoFocus,DHub
Parent,DShutter,DHub
Parent,D-DA,DHub
Parent,DOptovar,DHub
Parent,DGalvo,DHub
Parent,TransposeProcessor,DHub
Parent,ImageFlipX,DHub
Parent,ImageFlipY,DHub
Parent,MedianFilter,DHub
Parent,Rotator,DHub
Parent,DCam1,DHub-1

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,Focus,DStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DWheel
Label,DWheel,9,State-9
Label,DWheel,8,State-8
Label,DWheel,7,State-7
Label,DWheel,6,State-6
Label,DWheel,5,State-5
Label,DWheel,4,State-4
Label,DWheel,3,State-3
Label,DWheel,2,State-2
Label,DWheel,1,State-1
Label,DWheel,0,State-0
# DStateDevice
Label,DStateDevice,9,State-9
Label,DStateDevice,8,State-8
Label,DStateDevice,7,State-7
Label,DStateDevice,6,State-6
Label,DStateDevice,5,State-5
Label,DStateDevice,4,State-4
Label,DStateDevice,3,State-3
Label,DStateDevice,2,State-2
Label,DStateDevice,1,State-1
Label,DStateDevice,0,State-0
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Objective-D
Label,DObjective,2,Objective-C
Label,DObjective,1,Objective-B
Label,DObjective,0,Objective-A
# DLightPath
Label,DLightPath,2,State-2
Label,DLightPath,1,State-1
Label,DLightPath,0,State-0

# Configuration presets
# Group: channels
# Preset: 3
ConfigGroup,channels,3,DCam,RotateImages,0
ConfigGroup,channels,3,DCam1,RotateImages,1

# Preset: 2
ConfigGroup,channels,2,DCam,RotateImages,1
ConfigGroup,channels,2,DCam1,RotateImages,0

# Preset: 1
ConfigGroup,channels,1,DCam1,RotateImages,1
ConfigGroup,channels,1,DCam,RotateImages,1

# Preset: 0
ConfigGroup,channels,0,DCam1,RotateImages,0
ConfigGroup,channels,0,DCam,RotateImages,0


# Group: Multi
# Preset: 1
ConfigGroup,Multi,1,DCam1,RotateImages,1
ConfigGroup,Multi,1,Core,Camera,Multi Camera
ConfigGroup,Multi,1,Multi Camera,Physical Camera 1,DCam
ConfigGroup,Multi,1,Multi Camera,Physical Camera 2,DCam1

# Preset: 0
ConfigGroup,Multi,0,DCam1,RotateImages,0
ConfigGroup,Multi,0,Core,Camera,Multi Camera
ConfigGroup,Multi,0,Multi Camera,Physical Camera 1,Undefined
ConfigGroup,Multi,0,Multi Camera,Physical Camera 2,Undefined



# PixelSize settings

